PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u"data/p%s_s%s_%s" % (expInfo['participant'], str(expInfo['session']).zfill(2), expName)
  Enable Escape = False
  Experiment info = {'participant': '1004', 'session': '10'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = try_font_reading_task
  keyboardBackend = PsychToolbox
  logging level = warning
  runMode = 0
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Routines
  Routine instruction_routine
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    ImageComponent inst_img
      image = stimulus/instruction.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent key_resp_inst
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent init
      Code Type = Py
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      Before Experiment:
        import tobii_research as tr
        import time
        import math
        from datetime import datetime
        import os
        import csv
        import pandas as pd

        use_frequency = 600.0


        # ========== STATE ==========
        gaze_left_eye = None
        gaze_right_eye = None
        gaze_data_log = []

        shared_fixation = {
            'active': False,
            'target': None  # ต้องเป็น object ที่มี .contains(x, y)
        }

        fixation_state = {
            'entered': False,
            'start_time': None,
            'sustained': False
        }

        # ใช้สำหรับเก็บชื่อหน้าปัจจุบัน และ state ล่าสุดที่ถูก log
        gaze_state = {
            'current': None,
            'last_logged': None
        }


        # ========== TOBII SETUP ==========
        found_eyetrackers = tr.find_all_eyetrackers()
        if not found_eyetrackers:
            raise RuntimeError("No Tobii eye tracker found.")
        my_eyetracker = found_eyetrackers[0]
        print(f"Connected to: {my_eyetracker}")

        freqs = my_eyetracker.get_all_gaze_output_frequencies()
        print(f"Available frequencies: {freqs}")
        if use_frequency in freqs:
            my_eyetracker.set_gaze_output_frequency(use_frequency)
            current_freq = my_eyetracker.get_gaze_output_frequency()
            print(f"Sampling rate currently in use: {current_freq} Hz")
        else:
            print(f"Warning: {use_frequency} Hz not supported.")


        # ========== TIMESTAMP HELPERS ==========
        def get_timestamp_raw():
            return time.time()

        def get_timestamp():
            return datetime.now().strftime("%Y-%m-%d %H:%M:%S.%f")

        # ========== UNIT CONVERSION ==========
        def convert_Tobii_units_to_PsychoPy(gaze_x_norm, gaze_y_norm):
            gaze_x_psy = (gaze_x_norm - 0.5) * 2
            gaze_y_psy = (0.5 - gaze_y_norm) * 2
            return gaze_x_psy, gaze_y_psy

        # ========== GAZE CALLBACK ==========
        def gaze_data_callback(gaze_data):
            global gaze_left_eye, gaze_right_eye, fixation_state

            gaze_left_eye = gaze_data['left_gaze_point_on_display_area']
            gaze_right_eye = gaze_data['right_gaze_point_on_display_area']

            try:
                gaze_x_norm, gaze_y_norm = gaze_right_eye
                if math.isnan(gaze_x_norm) or math.isnan(gaze_y_norm):
                    return

                gaze_x, gaze_y = convert_Tobii_units_to_PsychoPy(gaze_x_norm, gaze_y_norm)

                # === LOG GAZE DATA ===
                # ใส่ state เฉพาะบรรทัดแรกของแต่ละ routine
                if gaze_state['current'] != gaze_state['last_logged']:
                    current_state_label = gaze_state['current'] or ""
                    gaze_state['last_logged'] = gaze_state['current']
                else:
                    current_state_label = ""

                gaze_data_log.append({
                    'timestamp_computer': get_timestamp(),
                    'timestamp_computer_raw': get_timestamp_raw(),
                    'gaze_x': gaze_x,
                    'gaze_y': gaze_y,
                    'state': current_state_label
                    })
        #        print(f"[DEBUG]gaze_data_log {gaze_data_log[-1]} ")

                # === FIXATION CHECK (ไม่เก็บ log) ===
                if shared_fixation['active'] and shared_fixation['target'] is not None:
                    now = time.perf_counter()
                    if shared_fixation['target'].contains(gaze_x, gaze_y):
        #                print("Enter")
        #                print(f"Position {gaze_x}, {gaze_y}")
                        if not fixation_state['entered']:
                            fixation_state['entered'] = True
                            fixation_state['start_time'] = now
                            fixation_state['sustained'] = False
                        elif now - fixation_state['start_time'] >= 1.0:
        #                    print("Success")
                            fixation_state['sustained'] = True
                    else:
        #                print(2)
                        fixation_state['entered'] = False
                        fixation_state['start_time'] = None
                        fixation_state['sustained'] = False

            except Exception as e:
                print(f"[ERROR] gaze_data_callback failed: {e}")

        # ========== START CALLBACK ==========
        my_eyetracker.subscribe_to(tr.EYETRACKER_GAZE_DATA, gaze_data_callback, as_dictionary=True)
      Begin Experiment:
        screen_width, screen_height = win.size
        # Normalize session to two digits (allow "1" or "01")
        sess_raw = str(expInfo.get('session', '')).strip()
        sessionStr = sess_raw.zfill(2)

        # Build the session file path (adjust folder/name to your actual files)
        # Example assumes: ./sessions/session01.xlsx ... session18.xlsx
        sessionFile = os.path.join('session_file', f'session{sessionStr}.xlsx')

        # (Optional) sanity check in console
        if not os.path.exists(sessionFile):
            print(f"WARNING: Session file not found: {sessionFile}")


        participant_id = expInfo['participant']
        session_id = expInfo['session']

        os.makedirs("gaze_data", exist_ok=True)

        base_name = f"p{participant_id}_s{session_id}_gaze_data"
        ext = ".csv"

        # ---- find available filename ----
        counter = 0
        while True:
            if counter == 0:
                gaze_csv_path = os.path.join("gaze_data", base_name + ext)
            else:
                gaze_csv_path = os.path.join("gaze_data", f"{base_name}_{counter}{ext}")

            if not os.path.exists(gaze_csv_path):
                break
            counter += 1

        # ---- create file + write header once ----
        with open(gaze_csv_path, "w", newline="", encoding="utf-8") as f:
            writer = csv.writer(f)
            writer.writerow([
                "timestamp_computer",
                "timestamp_computer_raw",
                "gaze_x",
                "gaze_y",
                "state"
            ])

        gaze_header_written = True

        print(f"[GAZE] Writing to: {gaze_csv_path}")
      Begin Routine:
        gaze_state['current'] = 'begin'
      End Experiment:
        ## Unsubscribe
        #my_eyetracker.unsubscribe_from(tr.EYETRACKER_GAZE_DATA, gaze_data_callback)
        #os.makedirs("gaze_data", exist_ok=True)
        #
        ## Save to CSV
        #participant_id = expInfo['participant']
        #session_id = expInfo['session']
        #output_path = f"gaze_data/p{participant_id}_s{session_id}_gaze_data.csv"
        #with open(output_path, 'w', newline='') as csvfile:
        #    fieldnames = gaze_data_log[0].keys()
        #    writer = csv.DictWriter(csvfile, fieldnames=fieldnames)
        #    writer.writeheader()
        #    writer.writerows(gaze_data_log)
        #
        #print("Saved gaze_log_full.csv.")
        # Unsubscribe
        my_eyetracker.unsubscribe_from(tr.EYETRACKER_GAZE_DATA, gaze_data_callback)
        print(f"Saved gaze data (streamed) to: {gaze_csv_path}")

        #os.makedirs("gaze_data", exist_ok=True)
        #
        ## Save to CSV using pandas
        #participant_id = expInfo['participant']
        #session_id = expInfo['session']
        #output_path = f"gaze_data/p{participant_id}_s{session_id}_gaze_data.csv"
        #
        ## Convert gaze_data_log (list of dicts) to DataFrame
        #df = pd.DataFrame(gaze_data_log)
        #
        ## Save with high float precision
        #df.to_csv(output_path, index=False, float_format="%.6f")
        #
        #print("Saved gaze_log_full.csv.")
      End Routine:
        # กันไว้ เผื่อยังไม่ set path
        if gaze_csv_path and len(gaze_data_log) > 0:
        #    routine_name = gaze_state['current'] or ""  # หรือใช้ชื่อ routine จริงถ้าคุณ set ไว้

            with open(gaze_csv_path, "a", newline="", encoding="utf-8") as f:
                writer = csv.writer(f)
                for row in gaze_data_log:
                    writer.writerow([
                        row.get("timestamp_computer", ""),
                        row.get("timestamp_computer_raw", ""),
                        row.get("gaze_x", ""),
                        row.get("gaze_y", ""),
                        row.get("state", "")
                    ])

        # ล้าง buffer เพื่อไม่กิน RAM
        gaze_data_log.clear()
        # รีเซ็ต gaze state เพื่อไม่ให้ log state ซ้ำ
        gaze_state['current'] = None
  Routine fixation_routine
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    ImageComponent fixation_img
      image = stimulus/fixation.png
      opacity = 0.6
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent fixation_area
      fillColor = 0.2941, -0.6706, -0.6706
      opacity = 0
      pos = (-0.75, 0.52)
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Py
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      Begin Experiment:
        # Create gaze dot and text for visualization
        screen_width, screen_height = win.size
        gaze_text = visual.TextStim(
            win,
            text='',
            pos=(0.6, 0.45),
            height=0.05,
            color='white',
            colorSpace='rgb',
            units='norm',
            name='gaze_text',
            autoLog=False
        )

        gaze_dot = visual.Circle(
            win,
            radius=0.02,
            fillColor='red',
            lineColor='red',
            pos=(0, 0),
            units='norm',
            name='gaze_dot',
            autoLog=False
        )
      Begin Routine:
        # === Fixation Begin Routine ===

        # แจ้งระบบ logger ว่าตอนนี้อยู่หน้า fixation (จะใช้กับ gaze_state['current'])
        gaze_state['current'] = 'fixation'

        # รีเซ็ตสถานะ fixation เพื่อเริ่มตรวจจับใหม่
        fixation_state['entered'] = False
        fixation_state['start_time'] = None
        fixation_state['sustained'] = False

        # กำหนดพื้นที่ fixation ที่ต้องการให้ผู้เข้าร่วมจ้อง
        shared_fixation['active'] = True
        shared_fixation['target'] = fixation_area  # fixation_area ควรเป็น visual.Rect หรือ visual.Circle ที่มี .contains(x, y)
      Each Frame:
        # === Fixation Each Frame ===

        # เช็กว่า fixation ครบหรือยัง
        if fixation_state['sustained']:
            print("\n---------------Fixation complete — exiting fixation_screen.")
            shared_fixation['active'] = False
            shared_fixation['target'] = None
            gaze_state['current'] = None  # reset gaze state เพื่อไม่ให้ log state ซ้ำ
            continueRoutine = False

        # Optional: แสดงตำแหน่ง gaze
        if gaze_right_eye and not fixation_state['sustained']:
            try:
                gaze_x_norm, gaze_y_norm = gaze_right_eye
                if not math.isnan(gaze_x_norm) and not math.isnan(gaze_y_norm):
                    gaze_x, gaze_y = convert_Tobii_units_to_PsychoPy(gaze_x_norm, gaze_y_norm)
                    gaze_dot.pos = (gaze_x, gaze_y)
                    gaze_dot.draw()
        #            gaze_text.text = f"x: {gaze_x:.2f}, y: {gaze_y:.2f}"
        #            gaze_text.draw()
            except Exception as e:
                print(f"[WARNING] Failed to draw gaze dot: {e}")
      End Routine:
        # === Fixation End Routine ===
        # กันไว้ เผื่อยังไม่ set path
        if gaze_csv_path and len(gaze_data_log) > 0:
            routine_name = gaze_state['current'] or ""  # หรือใช้ชื่อ routine จริงถ้าคุณ set ไว้

            with open(gaze_csv_path, "a", newline="", encoding="utf-8") as f:
                writer = csv.writer(f)
                for row in gaze_data_log:
                    writer.writerow([
                        row.get("timestamp_computer", ""),
                        row.get("timestamp_computer_raw", ""),
                        row.get("gaze_x", ""),
                        row.get("gaze_y", ""),
                        row.get("state", "")
                    ])

        # ล้าง buffer เพื่อไม่กิน RAM
        gaze_data_log.clear()
        # ปิดระบบตรวจจับ fixation
        shared_fixation['active'] = False
        shared_fixation['target'] = None

        # รีเซ็ต gaze state เพื่อไม่ให้ log state ซ้ำ
        gaze_state['current'] = None
  Routine reading_routine
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    ImageComponent reading_img
      image [set every repeat] = $stimulus_img
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 50
      units = norm
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    KeyboardComponent key_finish_read
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 50
      store = all keys
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    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        # === Reading Begin Routine ===
        gaze_state['current'] = 'reading'
        gaze_state['last_logged'] = None   # ให้ "reading" โผล่ 1 แถวตอนเริ่ม

        # reset counter ใน routine นี้
        spacebar_count = 0

        # baseline: จำนวน keys ที่ค้างมาก่อนเข้า routine นี้
        keys_base = len(key_finish_read.keys) if key_finish_read.keys else 0
      Each Frame:
        # === Reading Each Frame ===

        # วาดตำแหน่ง gaze แบบ real-time (ของเดิมคุณ)
        if gaze_right_eye:
            try:
                gaze_x_norm, gaze_y_norm = gaze_right_eye
                if not math.isnan(gaze_x_norm) and not math.isnan(gaze_y_norm):
                    gaze_x, gaze_y = convert_Tobii_units_to_PsychoPy(gaze_x_norm, gaze_y_norm)
                    # gaze_dot.pos = (gaze_x, gaze_y)
                    # gaze_dot.draw()
                    # gaze_text.text = f"x: {gaze_x:.2f}, y: {gaze_y:.2f}"
                    # gaze_text.draw()
            except Exception as e:
                print(f"[WARNING] Failed to draw gaze dot: {e}")

        # -------------------------------
        # ตรวจการกด spacebar (นับทุกครั้งที่กด ไม่ว่าเขากดกี่ครั้ง)
        # ให้ marker โผล่ครั้งเดียวต่อการกด (edge detect)
        # -------------------------------
        keys_list = key_finish_read.keys
        n_total = len(keys_list) if keys_list else 0

        # จำนวนการกด "ใหม่" ที่เกิดใน routine นี้เท่านั้น
        n_pressed = max(0, n_total - keys_base)

        #print("n_total:", n_total, "keys_base:", keys_base, "n_pressed:", n_pressed)

        # ถ้ามีการกดเพิ่มจากครั้งล่าสุดใน routine นี้ -> ยิง marker 1 ครั้ง
        if n_pressed > spacebar_count:
            spacebar_count = n_pressed
        #    print("spacebar_count:", spacebar_count)

            gaze_state['current'] = f'spacebar{spacebar_count}'
            gaze_state['last_logged'] = None
      End Routine:
        # -------------------------------
        # ยิง marker ตอนจบ reading
        # -------------------------------
        gaze_state['current'] = 'end_reading'

        # -------------------------------
        # กันไว้ เผื่อยังไม่ set path
        if gaze_csv_path and len(gaze_data_log) > 0:
            routine_name = gaze_state['current'] or ""

            with open(gaze_csv_path, "a", newline="", encoding="utf-8") as f:
                writer = csv.writer(f)
                for row in gaze_data_log:
                    writer.writerow([
                        row.get("timestamp_computer", ""),
                        row.get("timestamp_computer_raw", ""),
                        row.get("gaze_x", ""),
                        row.get("gaze_y", ""),
                        row.get("state", "")
                    ])

        # ล้าง buffer เพื่อไม่กิน RAM
        gaze_data_log.clear()
  Routine question_routine
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    ImageComponent question_image
      image [set every repeat] = $question_img
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent key_answer
      allowedKeys = '1','2','3','4'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        # === Trial Begin Routine ===
        gaze_state['current'] = 'question'
      Each Frame:
        # === Trial Each Frame ===

        # วาดตำแหน่ง gaze แบบ real-time
        if gaze_right_eye:
            try:
                gaze_x_norm, gaze_y_norm = gaze_right_eye
                if not math.isnan(gaze_x_norm) and not math.isnan(gaze_y_norm):
                    gaze_x, gaze_y = convert_Tobii_units_to_PsychoPy(gaze_x_norm, gaze_y_norm)
        #            gaze_dot.pos = (gaze_x, gaze_y)
        #            gaze_dot.draw()
        #            gaze_text.text = f"x: {gaze_x:.2f}, y: {gaze_y:.2f}"
        #            gaze_text.draw()
            except Exception as e:
                print(f"[WARNING] Failed to draw gaze dot: {e}")
      End Routine:
        # -------------------------------
        # กันไว้ เผื่อยังไม่ set path
        if gaze_csv_path and len(gaze_data_log) > 0:
            routine_name = gaze_state['current'] or ""  # หรือใช้ชื่อ routine จริงถ้าคุณ set ไว้

            with open(gaze_csv_path, "a", newline="", encoding="utf-8") as f:
                writer = csv.writer(f)
                for row in gaze_data_log:
                    writer.writerow([
                        row.get("timestamp_computer", ""),
                        row.get("timestamp_computer_raw", ""),
                        row.get("gaze_x", ""),
                        row.get("gaze_y", ""),
                        row.get("state", "")
                    ])

        # ล้าง buffer เพื่อไม่กิน RAM
        gaze_data_log.clear()
        gaze_state['current'] = None
  Routine ratingcomp_routine
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    ImageComponent ratingcomp_img
      image [set every repeat] = $rating_comp_img
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent key_ratingcomp
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        # === Trial Begin Routine ===
        gaze_state['current'] = 'ratingcomp'

        # Skip this rating if not requested
        if not doRating or rating_comp_img in [None, '', 'nan']:
            continueRoutine = False
      Each Frame:
        # === Trial Each Frame ===

        # วาดตำแหน่ง gaze แบบ real-time
        if gaze_right_eye:
            try:
                gaze_x_norm, gaze_y_norm = gaze_right_eye
                if not math.isnan(gaze_x_norm) and not math.isnan(gaze_y_norm):
                    gaze_x, gaze_y = convert_Tobii_units_to_PsychoPy(gaze_x_norm, gaze_y_norm)
        #            gaze_dot.pos = (gaze_x, gaze_y)
        #            gaze_dot.draw()
        #            gaze_text.text = f"x: {gaze_x:.2f}, y: {gaze_y:.2f}"
        #            gaze_text.draw()
            except Exception as e:
                print(f"[WARNING] Failed to draw gaze dot: {e}")
      End Routine:
        # -------------------------------
        # กันไว้ เผื่อยังไม่ set path
        if gaze_csv_path and len(gaze_data_log) > 0:
            routine_name = gaze_state['current'] or ""  # หรือใช้ชื่อ routine จริงถ้าคุณ set ไว้

            with open(gaze_csv_path, "a", newline="", encoding="utf-8") as f:
                writer = csv.writer(f)
                for row in gaze_data_log:
                    writer.writerow([
                        row.get("timestamp_computer", ""),
                        row.get("timestamp_computer_raw", ""),
                        row.get("gaze_x", ""),
                        row.get("gaze_y", ""),
                        row.get("state", "")
                    ])

        # ล้าง buffer เพื่อไม่กิน RAM
        gaze_data_log.clear()
        gaze_state['current'] = None
  Routine ratingfont_routine
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    ImageComponent ratingfont_img
      image [set every repeat] = $rating_font_img
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent key_ratingfont
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        # === Trial Begin Routine ===
        gaze_state['current'] = 'ratingfont'

        if not doRating or rating_font_img in [None, '', 'nan']:
            continueRoutine = False
      Each Frame:
        # === Trial Each Frame ===

        # วาดตำแหน่ง gaze แบบ real-time
        if gaze_right_eye:
            try:
                gaze_x_norm, gaze_y_norm = gaze_right_eye
                if not math.isnan(gaze_x_norm) and not math.isnan(gaze_y_norm):
                    gaze_x, gaze_y = convert_Tobii_units_to_PsychoPy(gaze_x_norm, gaze_y_norm)
        #            gaze_dot.pos = (gaze_x, gaze_y)
        #            gaze_dot.draw()
        #            gaze_text.text = f"x: {gaze_x:.2f}, y: {gaze_y:.2f}"
        #            gaze_text.draw()
            except Exception as e:
                print(f"[WARNING] Failed to draw gaze dot: {e}")
      End Routine:
        # -------------------------------
        # กันไว้ เผื่อยังไม่ set path
        if gaze_csv_path and len(gaze_data_log) > 0:
            routine_name = gaze_state['current'] or ""  # หรือใช้ชื่อ routine จริงถ้าคุณ set ไว้

            with open(gaze_csv_path, "a", newline="", encoding="utf-8") as f:
                writer = csv.writer(f)
                for row in gaze_data_log:
                    writer.writerow([
                        row.get("timestamp_computer", ""),
                        row.get("timestamp_computer_raw", ""),
                        row.get("gaze_x", ""),
                        row.get("gaze_y", ""),
                        row.get("state", "")
                    ])

        # ล้าง buffer เพื่อไม่กิน RAM
        gaze_data_log.clear()
        gaze_state['current'] = None
  Routine init_routine
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    CodeComponent code_3
      Code Type = Py
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      Before Experiment:
        import os
      Begin Experiment:
        # Normalize session to two digits (allow "1" or "01")
        sess_raw = str(expInfo.get('session', '')).strip()
        sessionStr = sess_raw.zfill(2)

        # Build the session file path (adjust folder/name to your actual files)
        # Example assumes: ./sessions/session01.xlsx ... session18.xlsx
        sessionFile = os.path.join('sessions', f'session{sessionStr}.xlsx')

        # (Optional) sanity check in console
        if not os.path.exists(sessionFile):
            print(f"WARNING: Session file not found: {sessionFile}")
  Routine end_routine
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    ImageComponent end_img
      image = stimulus/end_exp.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = norm
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Flow
  Routine instruction_routine
  LoopInitiator loopexp loopType="TrialHandler"
    conditionsFile = $sessionFile
    loopType = random
    nReps = 1
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    Routine fixation_routine
    Routine reading_routine
    Routine question_routine
    Routine ratingcomp_routine
    Routine ratingfont_routine
  LoopTerminator loopexp
  Routine end_routine
